PsychoPy2experiment version="1.79.01"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = ior
  Units = deg
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    PolygonComponent frameMiddle
      size = [1, 1]
      units = deg
      lineColor = $[0,0,0]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      fillColor = $[-1,-1,-1]
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    PolygonComponent frameLeft
      size = [1, 1]
      pos = [-8, 0]
      units = deg
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      fillColor = $[-1,-1,-1]
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    PolygonComponent frameRight
      size = [1, 1]
      pos = [8, 0]
      units = deg
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      fillColor = $[-1,-1,-1]
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    PolygonComponent targetMiddle
      size = [0.1, 0.1]
      units = deg
      startVal [time (s)] = 0.050
      lineWidth = 0
      stopVal [duration (s)] = 0.5
      fillColor = $[1,1,1]
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    PolygonComponent targetLeft
      pos = [-8, 0]
      startVal [time (s)] = 0.050
      size = [0.1, 0.1]
      fillColor = $[1,1,1]
      units = deg
      stopVal [duration (s)] = 0.5
      lineWidth = 0
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    PolygonComponent targetRight
      pos = [8, 0]
      startVal [time (s)] = 0.050
      size = [0.1, 0.1]
      fillColor = $[1,1,1]
      units = deg
      stopVal [duration (s)] = 0.5
      lineWidth = 0
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  Routine instructions
    TextComponent instructionsText
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        V následujícím experimentu se testuje váš postřeh. Experiment se
        skládá z krátkých úloh, které se budou v obměnách opakovat. V každé
        úloze uvidíte 3 čtverce, po celou dobu sledujte prostřední čtverec,
        nesnažte se hýbat očima. Čekejte, zda se objeví v některém čtverci
        malý bílý čtvereček a pokud ano, stiskněte co nejrychleji mezerník.
        Pokud ne, nedělejte nic a počkejte na další úlohu. Snažte se pracovat
        co nejrychleji, ale přesně (bez chyb).
    KeyboardComponent instructionsKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ior-design.xlsx
    random seed = 0
    loopType = random
    nReps = 1
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    conditions:
      [{u'target_side': u'left', u'target_time': 50, u'cue_side': u'left'},
      {u'target_side': u'right', u'target_time': 50, u'cue_side': u'left'},
      {u'target_side': u'central', u'target_time': 50, u'cue_side': u'left'},
      {u'target_side': u'none', u'target_time': 50, u'cue_side': u'left'},
      {u'target_side': u'left', u'target_time': 50, u'cue_side': u'right'},
      {u'target_side': u'right', u'target_time': 50, u'cue_side': u'right'},
      {u'target_side': u'central', u'target_time': 50, u'cue_side': u'right'},
      {u'target_side': u'none', u'target_time': 50, u'cue_side': u'right'},
      {u'target_side': u'left', u'target_time': 200, u'cue_side': u'left'},
      {u'target_side': u'right', u'target_time': 200, u'cue_side': u'left'},
      {u'target_side': u'central', u'target_time': 200, u'cue_side': u'left'},
      {u'target_side': u'none', u'target_time': 200, u'cue_side': u'left'},
      {u'target_side': u'left', u'target_time': 200, u'cue_side': u'right'},
      {u'target_side': u'right', u'target_time': 200, u'cue_side': u'right'},
      {u'target_side': u'central', u'target_time': 200, u'cue_side': u'right'},
      {u'target_side': u'none', u'target_time': 200, u'cue_side': u'right'},
      {u'target_side': u'left', u'target_time': 350, u'cue_side': u'left'},
      {u'target_side': u'right', u'target_time': 350, u'cue_side': u'left'},
      {u'target_side': u'central', u'target_time': 350, u'cue_side': u'left'},
      {u'target_side': u'none', u'target_time': 350, u'cue_side': u'left'},
      {u'target_side': u'left', u'target_time': 350, u'cue_side': u'right'}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
    Routine trial
  LoopTerminator trials
